<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <!-- Coverage-->
    <component name="my_component">
        <variable name="eqnEqEq" units="dimensionless"/>
        <variable name="eqnNeq" units="dimensionless"/>
        <variable name="eqnLt" units="dimensionless"/>
        <variable name="eqnLeq" units="dimensionless"/>
        <variable name="eqnGt" units="dimensionless"/>
        <variable name="eqnGeq" units="dimensionless"/>
        <variable name="eqnPlus" units="dimensionless"/>
        <variable name="eqnMultiplePlus" units="dimensionless"/>
        <variable name="eqnMinus" units="dimensionless"/>
        <variable name="eqnMultipleMinus" units="dimensionless"/>
        <variable name="eqnSin" units="dimensionless"/>
        <variable name="eqnCn" units="dimensionless"/>
        <variable name="eqnCi" units="dimensionless"/>
        <variable name="eqnTrue" units="dimensionless"/>
        <variable name="eqnFalse" units="dimensionless"/>
        <variable name="eqnNan" units="dimensionless"/>
        <variable name="eqnPi" units="dimensionless"/>
        <variable name="eqnInf" units="dimensionless"/>
        <variable name="eqnE" units="dimensionless"/>
        <variable initial_value="1" name="m" units="dimensionless"/>
        <variable initial_value="2" name="n" units="dimensionless"/>
        <variable initial_value="3" name="o" units="dimensionless"/>
        <variable initial_value="4" name="p" units="dimensionless"/>
        <variable initial_value="5" name="q" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>eqnEqEq</ci>
                <apply>
                    <eq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNeq</ci>
                <apply>
                    <neq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLt</ci>
                <apply>
                    <lt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLeq</ci>
                <apply>
                    <leq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGt</ci>
                <apply>
                    <gt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGeq</ci>
                <apply>
                    <geq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlus</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultiplePlus</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinus</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMultipleMinus</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSin</ci>
                <apply>
                    <sin/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCn</ci>
                <cn cellml:units="dimensionless">3</cn>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCi</ci>
                <ci>m</ci>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTrue</ci>
                <true/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFalse</ci>
                <false/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNan</ci>
                <notanumber/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPi</ci>
                <pi/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnInf</ci>
                <infinity/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnE</ci>
                <exponentiale/>
            </apply>
        </math>
    </component>
</model>
